/*
Author: Nikki Pelot, modified by Eric Musselman
Date created: February 5, 2016

Description:
- Binary search algorithm to find threshold.

Important notes:
- 

Variables that must be defined in wrapper/params file:
- thresh_resoln
- stimamp_bottom_init
- stimamp_top_init
- pc = new ParallelContext()
*/

// Vector containing results to pass back to batch run
objref thresh_values
Nresults = 1
thresh_values = new Vector(Nresults,0)

// Find threshold with a binary search algorithm
proc FindThresh() {//local key
	//key = $1
	fasc = $1
	stimamp_top       = stimamp_top_init.x[fasc]
	stimamp_bottom    = stimamp_bottom_init.x[fasc]
	check_top_flag    = 0
	check_bottom_flag = 0
	
	// Check that the initial stimamp_top is large enough to elicit an AP
	RunSim(stimamp_top)
	N_APs_top = N_APs
	//check_AP_top = check_AP
	
	// Check that the initial stimamp_bottom is small enough to not elicit an AP
	RunSim(stimamp_bottom)
	N_APs_bottom = N_APs
	//check_AP_bottom = check_AP

	// Check if initial stimamp_top and _bottom are sufficient. If yes, proceed to binary search algorithm.
	// Need at least N_minAPs in response to the top bound
	if (N_APs_top < N_minAPs) {
		print "ERROR: Initial stimamp_top value does not elicit an AP (find_block_thresh = 0) or does not block (find_block_thresh = 1) - need to increase its magnitude and/or increase tstop to detect evoked AP"
		return 0
	} else if (N_APs_bottom != (N_minAPs-1)) {
		print "Need stimamp_bottom_init to elicit 1 AP if flag_whichstim = 2 and 0 AP otherwise"
		print "ERROR: Initial stimamp_bottom value elicits an AP (find_block_thresh = 0) or blocks (find_block_thresh = 1) - need to decrease its magnitude and/or increase tstop to detect block test pulses"
		return 0
	} else {
		stimamp_top = stimamp_top_init
		stimamp_bottom = stimamp_bottom_init 
		stimamp_prev = stimamp_top_init
		
		while(1) {
			stimamp = (stimamp_bottom + stimamp_top) / 2
			print "stimamp = ", stimamp, "mA for extracellular and nA for intracellular (check flag_whichstim)"
			RunSim(stimamp)

			//if ((abs((stimamp_bottom - stimamp_top) / 2)) < thresh_resoln) {	// resolution of search
			if ((abs((stimamp_bottom - stimamp_top) / stimamp_top)) < thresh_resoln) {	// resolution of search
				// Use last amplitude that produced an action potential
				if (N_APs < N_minAPs) {
					stimamp = stimamp_prev
				} 
				
				print "Done searching! stimamp: ", stimamp, "mA for extracellular and nA for intracellular (check flag_whichstim)"
				
				RunSim(stimamp)
				if (N_APs < N_minAPs) {
					print "ERROR: Final stimamp value does not elicit an AP"
					return 0
				}
				
				//save_data(myPW,myPW_ind,myfibernum,stimamp)
				break
			} else if (N_APs >= N_minAPs) {				// found an AP
				stimamp_prev = stimamp
				stimamp_top = stimamp
			} else if (N_APs < N_minAPs) {				// no AP
				stimamp_bottom = stimamp
			}
		}

		print "Threshold: ", stimamp, "mA for extracellular and nA for intracellular (check flag_whichstim)"
		// print "Just Beneath Threshold: ", stimamp_bottom, "mA"
		//print "CV: ",   , "mm/ms"
		
		thresh_values.x[0] = stimamp
		
		// pc.pack(thresh_values)
		// pc.post(key)
		// return key
	}
}
